---
API: 2.1
OpenSesame: 3.3.14
Platform: nt
---
set width 1024
set uniform_coordinates yes
set title "New experiment"
set subject_parity even
set subject_nr 0
set start experiment
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend psycho
set round_decimals 2
set mouse_backend psycho
set keyboard_backend psycho
set height 768
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 18
set font_italic no
set font_family mono
set font_bold no
set experiment_path "C:\\Users\\ei00191\\OneDrive - University of Surrey\\Desktop\\phd\\Exp ENG"
set disable_garbage_collection yes
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend psycho
set clock_backend psycho
set canvas_backend psycho
set background white

define form_text_display Break_1
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Break
	set form_text "This is break. Press Ok to continue."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Break_2
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Break
	set form_text "This is break. Press Ok to continue."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop Condition_eight
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence_8

define loop Condition_four
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence

define loop Condition_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence_8_1

define form_text_input Demo_input
	set timeout infinite
	set spacing 10
	set rows "1;1;6"
	set only_render no
	set margins "50;50;50;50"
	set form_var response
	set form_title "Basic info"
	set form_question "handedness and DOB:"
	set description "A simple text input form"
	set cols 1
	set _theme gray
	widget 0 0 1 1 label text="[form_title]"
	widget 0 1 1 1 label center=no text="[form_question]"
	widget 0 2 1 1 text_input focus=yes return_accepts=yes stub="" var="[form_var]"


define form_text_display End
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title "The end!"
	set form_text "This is the end of the task. Press Ok to exit."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop IBI_1_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	run new_sequence_1

define loop IBI_1_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	run new_sequence_1

define loop IBI_1_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	run new_sequence_1

define loop IBI_2_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_2_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_2_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_3_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	run new_sequence_1

define loop IBI_3_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	run new_sequence_1

define loop IBI_3_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	run new_sequence_1

define loop IBI_4_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	run new_sequence_1

define loop IBI_4_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	run new_sequence_1

define loop IBI_4_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	run new_sequence_1

define loop IBI_5_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	run new_sequence_1

define loop IBI_5_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_5_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 11
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	run new_sequence_1

define loop IBI_6_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_6_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_6_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 12
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 10
	setcycle 1 audio 2
	setcycle 1 type 1
	setcycle 2 audio 2
	setcycle 2 type 1
	setcycle 3 audio 2
	setcycle 3 type 1
	setcycle 4 audio 2
	setcycle 4 type 1
	setcycle 5 audio 2
	setcycle 5 type 1
	setcycle 6 audio 2
	setcycle 6 type 1
	setcycle 7 audio 2
	setcycle 7 type 1
	setcycle 8 audio 2
	setcycle 8 type 1
	setcycle 9 audio 2
	setcycle 9 type 1
	setcycle 10 audio 2
	setcycle 10 type 1
	setcycle 11 audio 2
	setcycle 11 type 1
	run new_sequence_1

define loop IBI_practice
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 3
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 0
	setcycle 1 audio 2
	setcycle 1 type 0
	setcycle 2 audio 2
	setcycle 2 type 0
	run new_sequence_1

define form_text_display Practice_end
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Practice
	set form_text "The practice is over. Press Ok to start."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Practice_start
	set timeout infinite
	set spacing 10
	set rows "1;4;1"
	set only_render no
	set ok_text Ok
	set margins "50;50;50;50"
	set form_title Practice
	set form_text "This is practice. Press Ok to start."
	set description "A simple text display form"
	set cols "1;1;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define loop block_1_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 4
	setcycle 3 type 4
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 4
	setcycle 5 type 4
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 4
	setcycle 7 type 4
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 4
	setcycle 9 type 4
	run new_sequence_1

define loop block_1_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 8
	setcycle 1 type 8
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 8
	setcycle 5 type 8
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 8
	setcycle 7 type 8
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 8
	setcycle 9 type 8
	run new_sequence_1

define loop block_1_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio rin
	setcycle 1 type 6
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio rin
	setcycle 3 type 6
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 6
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio rin
	setcycle 7 type 6
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio rin
	setcycle 9 type 6
	run new_sequence_1

define loop block_2_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 4
	setcycle 3 type 4
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 4
	setcycle 5 type 4
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 4
	setcycle 7 type 4
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 4
	setcycle 9 type 4
	run new_sequence_1

define loop block_2_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 8
	setcycle 1 type 8
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 8
	setcycle 5 type 8
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 8
	setcycle 7 type 8
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 8
	setcycle 9 type 8
	run new_sequence_1

define loop block_2_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio rin
	setcycle 1 type 6
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio rin
	setcycle 3 type 6
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 6
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio rin
	setcycle 7 type 6
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio rin
	setcycle 9 type 6
	run new_sequence_1

define loop block_3_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 4
	setcycle 3 type 4
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 4
	setcycle 5 type 4
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 4
	setcycle 7 type 4
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 4
	setcycle 9 type 4
	run new_sequence_1

define loop block_3_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 8
	setcycle 1 type 8
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 8
	setcycle 5 type 8
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 8
	setcycle 7 type 8
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 8
	setcycle 9 type 8
	run new_sequence_1

define loop block_3_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio rin
	setcycle 1 type 6
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio rin
	setcycle 3 type 6
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 6
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio rin
	setcycle 7 type 6
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio rin
	setcycle 9 type 6
	run new_sequence_1

define loop block_4_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 4
	setcycle 3 type 4
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 4
	setcycle 5 type 4
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 4
	setcycle 7 type 4
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 4
	setcycle 9 type 4
	run new_sequence_1

define loop block_4_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 8
	setcycle 1 type 8
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 8
	setcycle 5 type 8
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 8
	setcycle 7 type 8
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 8
	setcycle 9 type 8
	run new_sequence_1

define loop block_4_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio rin
	setcycle 1 type 6
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio rin
	setcycle 3 type 6
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 6
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio rin
	setcycle 7 type 6
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio rin
	setcycle 9 type 6
	run new_sequence_1

define loop block_5_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 4
	setcycle 3 type 4
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 4
	setcycle 5 type 4
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 4
	setcycle 7 type 4
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 4
	setcycle 9 type 4
	run new_sequence_1

define loop block_5_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 8
	setcycle 1 type 8
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 8
	setcycle 5 type 8
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 8
	setcycle 7 type 8
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 8
	setcycle 9 type 8
	run new_sequence_1

define loop block_5_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio rin
	setcycle 1 type 6
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio rin
	setcycle 3 type 6
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 6
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio rin
	setcycle 7 type 6
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio rin
	setcycle 9 type 6
	run new_sequence_1

define loop block_6_4
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 4
	setcycle 3 type 4
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 4
	setcycle 5 type 4
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 4
	setcycle 7 type 4
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 4
	setcycle 9 type 4
	run new_sequence_1

define loop block_6_8
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 8
	setcycle 1 type 8
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio 8
	setcycle 5 type 8
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio 8
	setcycle 7 type 8
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio 8
	setcycle 9 type 8
	run new_sequence_1

define loop block_6_nonword
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 10
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio rin
	setcycle 1 type 6
	setcycle 2 audio 2
	setcycle 2 type 2
	setcycle 3 audio rin
	setcycle 3 type 6
	setcycle 4 audio 2
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 6
	setcycle 6 audio 2
	setcycle 6 type 2
	setcycle 7 audio rin
	setcycle 7 type 6
	setcycle 8 audio 2
	setcycle 8 type 2
	setcycle 9 audio rin
	setcycle 9 type 6
	run new_sequence_1

define sequence experiment
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run init always
	run Demo_input always
	run Practice_start always
	run one_sec_lag always
	run practice_1 always
	run Practice_end always
	run one_sec_lag always
	run Condition_nonword always
	run Break_1 always
	run one_sec_lag always
	run Condition_four always
	run Break_2 always
	run one_sec_lag always
	run Condition_eight always
	run End always

define inline_script init
	set description "Executes Python code"
	set _run ""
	___prepare__
	from win32com.client import Dispatch as com 
	oxy = com("OxySoft.OxyApplication")
	__end__

define inline_script new_inline_script_4
	set description "Executes Python code"
	___run__
	oxy.WriteEvent("s",self.get('type'))
	__end__
	set _prepare ""

define logger new_logger_4
	set description "Logs experimental data"
	set auto_log yes

define sampler new_sampler
	set volume 1
	set stop_after 0
	set sample "[audio].wav"
	set pitch 1
	set pan 0
	set fade_in 0
	set duration sound
	set description "Plays a sound file in .wav or .ogg format"

define sequence new_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_1_4 always
	run IBI_1_4 always
	run block_2_4 always
	run IBI_2_4 always
	run block_3_4 always
	run IBI_3_4 always
	run block_4_4 always
	run IBI_4_4 always

define sequence new_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run new_sampler always
	run new_inline_script_4 always
	run new_sketchpad_1 always
	run new_logger_4 always

define sequence new_sequence_2
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run practiceblock always
	run IBI_practice always

define sequence new_sequence_8
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_1_8 always
	run IBI_1_8 always
	run block_2_8 always
	run IBI_2_8 always
	run block_3_8 always
	run IBI_3_8 always
	run block_4_8 always
	run IBI_4_8 always

define sequence new_sequence_8_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run block_1_nonword always
	run IBI_1_nonword always
	run block_2_nonword always
	run IBI_2_nonword always
	run block_3_nonword always
	run IBI_3_nonword always
	run block_4_nonword always
	run IBI_4_nonword always

define sketchpad new_sketchpad_1
	set duration 1000
	set description "Displays stimuli"
	draw fixdot color=black show_if=always style=default x=0 y=0 z_index=0

define sketchpad one_sec_lag
	set duration 1000
	set description "Displays stimuli"

define loop practice_1
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 empty_column ""
	run new_sequence_2

define loop practiceblock
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 6
	set continuous no
	set break_if_on_first yes
	set break_if never
	setcycle 0 audio 2
	setcycle 0 type 20
	setcycle 1 audio 4
	setcycle 1 type 4
	setcycle 2 audio 8
	setcycle 2 type 2
	setcycle 3 audio 8
	setcycle 3 type 8
	setcycle 4 audio 8
	setcycle 4 type 2
	setcycle 5 audio rin
	setcycle 5 type 9
	run new_sequence_1

